PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = (1024, 768)
  expName = First_Experiment 
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    PolygonComponent target
      fillColor = white
      pos = (-300, 0)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        your task is to press y when you see a square.
        Press SPACE when you are ready to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
      text = Thank you!
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine thank
